PsychoPy2experiment version="3.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ekman_and_friesan_faces
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Routines
  Routine trial
    ImageComponent suspicious
      image = /Users/shegocaga/OpenBCI/cthulhu_bci/psychopy_experiments/ekman_and_friesan_faces/assets/suspicious.png
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 6
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    ImageComponent confident
      image = /Users/shegocaga/OpenBCI/cthulhu_bci/psychopy_experiments/ekman_and_friesan_faces/assets/confident.png
      size = (0.5, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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Flow
  Routine trial
